PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = pyo
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.4
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = TSST_fnirs_V4_FULL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine CTL1_TASK
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    CodeComponent CTL1_number
      Code Type = Py
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      Begin Experiment:
        ## BEGIN EXPERIMENT
        starting_number = 1022
        current_number = starting_number
        #number_clock = core.Clock()
      Begin Routine:
        ## BEGIN EXPERIMENT
        #number_clock.reset()
        lsl_outlet.push_sample([20]) #CTL1_TASK Block Start
        win.mouseVisible = False
        read_number.txt = str(current_number)
        kb.clearEvents()
        if skipNextRoutine:
            CTL1_Loop.finished = True
            skipNextRoutine = True
            continueRoutine = False
        else:
            #Schedule start tone to begin on next screen flip
            nextFlip_ptb = win.getFutureFlipTime(clock='ptb')
            StartTone.play(when=nextFlip_ptb)
      Each Frame:
        ## EACH FRAME
        read_number.txt = str(current_number)
        if t > 0.2:
            space_keys = kb.getKeys(["space"], waitRelease=False, clear=True)
            # Check if space key was pressed
            if space_keys:
                current_number -= 13
                if current_number < 1:
                    current_number = starting_number
                read_number.text = str(current_number)

        skip_keys = kb.getKeys(['s'],waitRelease=False,clear=True)
        if skip_keys:
            CTL1_Loop.finished = True
            skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([21]) #CTL1_TASK Block End
    TextComponent read_number
      letterHeight = 0.07
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 40
      text [set every repeat] = $current_number
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    CodeComponent check_time_3
      Code Type = Py
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      Each Frame:
        # hard stop at 40 s
        if t >= 40.0 - frameTolerance:
            read_number.setAutoDraw(False)
            continueRoutine = False
  Routine task_end
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    TextComponent task_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait for the next task to begin..
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    CodeComponent continue_task_code
      Code Type = Py
      Begin Routine:
        kb.clearEvents()
        win.mouseVisible = False
      Each Frame:
        ## EACH FRAME

        task_key = kb.getKeys(["return"], waitRelease=False, clear=True)
        # Check if space key was pressed
        if task_key:
            continueRoutine = False
      End Routine:
        kb.clearEvents()
  Routine CTL1_instruction_start
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    TextComponent ctl1_instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please read the number that appears on the screen out loud. You can read at your own pace.

        Press the space bar to go to the next number. You will read out loud for 40 seconds and then a PAUSE screen will appear for 20 seconds, please take a break during the PAUSE.

        Press the ENTER key to start the task.
    CodeComponent end_ctl1_instruction
      Code Type = Py
      Before Experiment:
        from psychopy.hardware import keyboard
        # for markers
        import socket
        from pylsl import StreamInfo, StreamOutlet
        markers = StreamInfo('fNIRSMarkerStream', 'Markers', 1, 0, 'int32', 'CPSPsychoPy')
        lsl_outlet = StreamOutlet(markers)
        modality = 'nirs'
      Begin Experiment:
        kb = keyboard.Keyboard()
        win.mouseVisible = False
      Begin Routine:
        kb.clearEvents()
        win.mouseVisible = False
      Each Frame:
        ## EACH FRAME

        continue_key = kb.getKeys(["return"], waitRelease=False, clear=True)
        # Check if space key was pressed
        if continue_key:
            continueRoutine = False
      End Routine:
        kb.clearEvents()
    CodeComponent createTones
      Code Type = Py
      Begin Experiment:
        import psychtoolbox as ptb
        from psychopy import sound

        StartTone = sound.Sound(800, secs=0.2, hamming=True)
        StartTone.setVolume(1.0)

        PauseTone = sound.Sound(600, secs=0.2, hamming=True)
        PauseTone.setVolume(1.0)
  Routine CTL2_instruction_start
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    TextComponent ctl2_instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Out loud, please consecutively subtract the number 13 from the number that appears on the screen. Keep subtracting the number 13 from the number.  If you reach 0, start again. If you make a mistake, the experimenter will tell you the correct number. You can work as fast or a slow as you want, just do your best! Please pause when you see the PAUSE screen.

        Press the ENTER KEY to start the task.
    CodeComponent end_ctl2_instruction
      Code Type = Py
      Before Experiment:
        from psychopy.hardware import keyboard
      Begin Experiment:
        kb = keyboard.Keyboard()
      Begin Routine:
        kb.clearEvents()
        win.mouseVisible = False
      Each Frame:
        ## EACH FRAME

        continue_key = kb.getKeys(["return"], waitRelease=False, clear=True)
        # Check if space key was pressed
        if continue_key:
            continueRoutine = False
      End Routine:
        kb.clearEvents()
  Routine TSST_instruction_start
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    TextComponent tsst_instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The judges will explain the task to you.

        Please do not press any keys.
    CodeComponent end_tsst_instruction
      Code Type = Py
      Before Experiment:
        from psychopy.hardware import keyboard
      Begin Experiment:
        kb = keyboard.Keyboard()
      Begin Routine:
        kb.clearEvents()
        win.mouseVisible = False

        if skipNextRoutine:
            skipNextRoutine = True
            continueRoutine = False
      Each Frame:
        ## EACH FRAME

        continue_key = kb.getKeys(["return"], waitRelease=False, clear=True)
        # Check if space key was pressed
        if continue_key:
            continueRoutine = False
      End Routine:
        kb.clearEvents()
  Routine Finished
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    TextComponent finished_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This part of the task is finished, please wait for further instructions.
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    CodeComponent finished_code
      Code Type = Py
      Begin Routine:
        kb.clearEvents()
        win.mouseVisible = False
      Each Frame:
        ## EACH FRAME

        task_key = kb.getKeys(["return"], waitRelease=False, clear=True)
        # Check if space key was pressed
        if task_key:
            continueRoutine = False
      End Routine:
        kb.clearEvents()
  Routine CTL1_PAUSE
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    TextComponent read_pausing
      letterHeight = 0.07
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text [set every repeat] = PAUSE
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    CodeComponent CTL1_Pause_Code
      Code Type = Py
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      Begin Routine:
        lsl_outlet.push_sample([30]) #CTL1_PAUSE Block Start
        win.mouseVisible = False
        if skipNextRoutine:
            CTL1_Loop.finished = True
            skipNextRoutine = False
            continueRoutine = False
        else:
            #Schedule start tone to begin on next screen flip
            nextFlip_ptb = win.getFutureFlipTime(clock='ptb')
            PauseTone.play(when=nextFlip_ptb)
      Each Frame:
        # hard stop at 20 s
        if t >= 20.0 - frameTolerance:
            read_pausing.setAutoDraw(False)
            continueRoutine = False


        skip_keys = kb.getKeys(['s'],waitRelease=False, clear=True)
        if skip_keys:
            CTL1_Loop.finished = True
        #    skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([31]) #CTL1_PAUSE Block End
  Routine CTL2_TASK
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    CodeComponent skip_CTL2
      Code Type = Py
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      Begin Routine:
        lsl_outlet.push_sample([40]) #CTL2_TASK Block Start
        #skipNextRoutine = False
        win.mouseVisible = False
        #start_tone_2.status = NOT_STARTED
        if skipNextRoutine:
            CTL2_Loop.finished = True
            skipNextRoutine = True
            continueRoutine = False
        else:
            #Schedule start tone to begin on next screen flip
            nextFlip_ptb = win.getFutureFlipTime(clock='ptb')
            StartTone.play(when=nextFlip_ptb)
      Each Frame:
        skip_keys = kb.getKeys(['s'],waitRelease=False, clear=True)
        if skip_keys:
            CTL2_Loop.finished = True
            skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([41]) #CTL2_TASK Block End
    TextComponent subtract_number
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
      text [set every repeat] = $StartingNumber
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    CodeComponent check_time
      Code Type = Py
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      Each Frame:
        # hard stop at 40 s
        if t >= 40.0 - frameTolerance:
            subtract_number.setAutoDraw(False)
            continueRoutine = False
  Routine CTL2_PAUSE
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    TextComponent subtract_pausing
      letterHeight = 0.07
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text [set every repeat] = PAUSE
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    CodeComponent CTL2_Pause_code
      Code Type = Py
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      Begin Routine:
        lsl_outlet.push_sample([50]) #CTL2_PAUSE Block Start
        win.mouseVisible = False
        if skipNextRoutine:
            CTL2_Loop.finished = True
            skipNextRoutine = False
            continueRoutine = False
        else:
            #Schedule start tone to begin on next screen flip
            nextFlip_ptb = win.getFutureFlipTime(clock='ptb')
            PauseTone.play(when=nextFlip_ptb)
      Each Frame:
        # hard stop at 20 s
        if t >= 20.0 - frameTolerance:
            subtract_pausing.setAutoDraw(False)
            continueRoutine = False


        skip_keys = kb.getKeys(['s'],waitRelease=False, clear=True)
        if skip_keys:
            CTL2_Loop.finished = True
        #    skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([51]) #CTL2_PAUSE Block End
  Routine TSST_ARITH_TASK
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    TextComponent subtract_number_TSST
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
      text [set every repeat] = $StartingNumber
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    CodeComponent skip_TSST
      Code Type = Py
      Begin Routine:
        lsl_outlet.push_sample([60]) #TSST_ARITH_TASK Block Start
        #skipNextRoutine = False
        win.mouseVisible = False

        #start_tone_3.status = NOT_STARTED

        if skipNextRoutine:
            TSST_Arith_Loop.finished = True
            skipNextRoutine = True
            continueRoutine = False
        else:
            #Schedule start tone to begin on next screen flip
            nextFlip_ptb = win.getFutureFlipTime(clock='ptb')
            StartTone.play(when=nextFlip_ptb)
      Each Frame:
        skip_keys = kb.getKeys(['s'], waitRelease=False, clear=True)
        if skip_keys:
            TSST_Arith_Loop.finished = True
            skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([61]) #TSST_ARITH_TASK Block End
    CodeComponent check_time_2
      Code Type = Py
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      Each Frame:
        # hard stop at 40 s
        if t >= 40.0 - frameTolerance:
            subtract_number_TSST.setAutoDraw(False)
            continueRoutine = False
  Routine TSST_ARITH_PAUSE
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    TextComponent subtract_pausing_TSST
      letterHeight = 0.07
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text [set every repeat] = PAUSE
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    CodeComponent check_time_4
      Code Type = Py
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      Begin Routine:
        lsl_outlet.push_sample([70]) #TSST_ARITH_PAUSE Block Start
        win.mouseVisible = False
        if skipNextRoutine:
            TSST_Arith_Loop.finished = True
            skipNextRoutine = False
            continueRoutine = False
        else:
            #Schedule start tone to begin on next screen flip
            nextFlip_ptb = win.getFutureFlipTime(clock='ptb')
            arithTone.play(when=nextFlip_ptb)
        #tsst_start_pause_tone.status = NOT_STARTED
      Each Frame:
        # hard stop at 40 s
        if t >= 20.0 - frameTolerance:
            subtract_pausing_TSST.setAutoDraw(False)
            continueRoutine = False


        skip_keys = kb.getKeys(['s'],waitRelease=False, clear=True)
        if skip_keys:
            TSST_Arith_Loop.finished = True
        #    skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([71]) #TSST_ARITH_PAUSE Block End
  Routine FIXATION
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    TextComponent fixation_cross
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = +
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    CodeComponent skip_fixation
      Code Type = Py
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      Begin Experiment:
        ## BEGIN EXPERIMENT
        skipNextRoutine = False
      Begin Routine:
        ## BEGIN ROUTINE
        #number_clock.reset()
        lsl_outlet.push_sample([10]) #Fixation-Cross Start
        win.mouseVisible = False
        kb.clearEvents()
      Each Frame:
        # hard stop at 30 s
        if t >= 30.0 - frameTolerance:
            fixation_cross.setAutoDraw(False)
            continueRoutine = False

        skip_keys = kb.getKeys(['s'],waitRelease=False,clear=True)
        if skip_keys:
            skipNextRoutine = True
            continueRoutine = False
      End Routine:
        lsl_outlet.push_sample([11]) #Fixation-Cross End
Flow
  Routine CTL1_instruction_start
  Routine FIXATION
  LoopInitiator CTL1_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 6
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    Routine CTL1_TASK
    Routine CTL1_PAUSE
  LoopTerminator CTL1_Loop
  Routine CTL2_instruction_start
  Routine FIXATION
  LoopInitiator CTL2_Loop loopType="TrialHandler"
    conditionsFile = $"stims/CTL2.xlsx"
    loopType = sequential
    nReps = 1
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    Routine CTL2_TASK
    Routine CTL2_PAUSE
  LoopTerminator CTL2_Loop
  Routine task_end
  Routine FIXATION
  Routine TSST_instruction_start
  LoopInitiator TSST_Arith_Loop loopType="TrialHandler"
    conditionsFile = $"stims/TSST_arith.xlsx"
    loopType = sequential
    nReps = 1
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    Routine TSST_ARITH_TASK
    Routine TSST_ARITH_PAUSE
  LoopTerminator TSST_Arith_Loop
  Routine Finished
